PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = savings
  Screen = 1
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Routines
  Routine feedback
    CodeComponent code_3
      Begin Routine:
        savings = int(savings + income - manexp - (rating_2.getRating()*1000))

        fb1='\n\n SAVINGS STATE REMARKS'
        if savings>0:
            fb2='\n NOT UNDER DEBT'
        else:
            fb2='\n IN DEBT!!'

        fb3='\n\n Remember your Goal is to Maximize the Amount of Savings by the end of the Game of Life! So Spend Wisely '

        if fb_condition==1:
            feedbackstr=''
        else:
            feedbackstr='Savings are now ' + str(savings) + fb1 + fb2 + fb3
      End Routine:
        thisExp.addData('savings', savings)
        thisExp.addData('manexp', manexp)
    TextComponent text_3
      text [set every repeat] = $feedbackstr
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trials
  Routine resp
    CodeComponent code_4
      Begin Routine:
        respstr='Mandatory expenditute is ' + str(manexp)
    TextComponent text_4
      text [set every repeat] = $respstr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating_2
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 0
      scaleDescription = Discretionary Expenditure (thousands)
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  Routine trial
    CodeComponent code
      Begin Routine:
        if trials_2.thisN<retirementN:
            income=10000
            imagefile='incomeimage.png'
        else:
            income=0
            imagefile='retimage.jpg'

        if trials_2.thisN==0:
            phasestr='INCOME PHASE'
            opacityval=1
        elif trials_2.thisN==retirementN:
            phasestr='RETIREMENT PHASE'
            opacityval=1
        else:
            phasestr=''
            opacityval=0

        manexp=int(np.ceil(random()*10)*1000)

        trialstr="LIFE PERIOD " + str(trials_2.thisN+1) + "\n SALARY: " + str(income)
    TextComponent text_5
      text [set every repeat] = $phasestr
      stopVal [duration (s)] = 1.5
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      opacity [set every repeat] = $opacityval
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $imagefile
      size = (0.5, 0.5)
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    TextComponent text_2
      text [set every repeat] = $trialstr
      stopVal [duration (s)] = 1.5
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine byebye
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The End

        Thank you for your participation
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine response
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine instructions
    CodeComponent code_2
      Begin Experiment:
        #import random

        retirementN=15
        savings=0

        if random()<0.5:
            fb_condition=1 #no feedback
        else:
            fb_condition=2 #feedback

        instructionstr=''
        phasestr=''
        imagefile=''
        opacityval=0
        trialstr=''
        respstr=''
        feedbackstr=''
        income=0
        manexp=0

        instruction_text=['Welcome to Investments and Savings Task\n\npress space to continue','General Instructions\n\nIn this task the participants will go through 20 stages called life cycles each of which will last on the Computer Screen in front of the participant.\n\nThere will be 2 separate sessions of the tasks each with 20 stages or life cycles. So the participant will play two rounds of the Investment and Savings Task.\n','General Instructions\n\nThere will be a break of 5 minutes between each of the session 1 and 2.\n\nAll responses to the task will be made through a response in the keyboard.','Task Specific Instructions\n\nThere are 20 life cycles in each session. These are divided into the INCOME PHASE and RETIREMENT PHASE.\n\nIncome Phase: \n\nIn the Income Phase there will be a constant amount of income flowing in to the participants bank account.\n\nRetirement Phase: \n\nIn the Retirement Phase there will be no incore flow but teh participant is expected to have a certain amout of savings in thier bank account accumulated over the Income Phase.\n\n','Task Expenditure Instruction\n\nIn every single life-cycle the Participant has to bear some expenses.\n\nThere are two main types of Expenses the participant will bear in the Investment and Savings Task.\n\nMandatory Expenses: These refer to the mandatory expenditures incurred in everyday life such as bills, transport, rent, internet connection fees heating, water supplies, accommodation, food etc.\n\nDiscretionary Expenses: These refer to the discretionary expenditures undertaken in everday life such as for holidays, shopping, movies, gifts, recreation etc.\n\n','Task Expenditure Instructions\n\nThe participant will incur the Mandatory expenditure AUTOMATICALLY.\n\nA specific (randomly generated) amount of money will be AUTOMATICALLY DEDUCTED from the Salary towards their Mandatory expenditure.\n\nThe participant has to only make a decision for the Discretionary Expenditure.\n\nThe Discretionary Expenditure is to be made through selecting a desired amount the participant wishes to spend by adjusting the slider on the computer screen.','Goal of the Investment and Savings Task\n\nThe main goal of this task is to maximize the amount of savings by the end of the last life-cycle.']
      Begin Routine:
        instructionstr=instruction_text[instrs.thisN]
      End Routine:
        thisExp.addData('fb_condition', fb_condition)
    TextComponent text
      text [set every repeat] = $instructionstr
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator instrs loopType="TrialHandler"
    loopType = sequential
    nReps = 7
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    Routine instructions
  LoopTerminator instrs
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine trial
    Routine resp
    Routine feedback
  LoopTerminator trials_2
  Routine byebye
